PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = main
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent word
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $thisWord
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Lexical Decision Task!

        In this task, you will be presented with a series of stimuli. Your job is to decide whether each stimulus is a real word or a non-word.

        Instructions:
        - Press left key if the stimulus is a real word.
        - Press right key if the stimulus is a non-word.

        Press 'Space' to start the task.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('corrAns', 'left'), ('thisCond', 'word'), ('thisWord', 'CAT')]),
      OrderedDict([('corrAns', 'left'), ('thisCond', 'word'), ('thisWord', 'BAR')]),
      OrderedDict([('corrAns', 'left'), ('thisCond', 'word'), ('thisWord', 'TEA')]),
      OrderedDict([('corrAns', 'right'), ('thisCond', 'nonword'), ('thisWord', 'GHS')]),
      OrderedDict([('corrAns', 'right'), ('thisCond', 'nonword'), ('thisWord', 'JUL')]),
      OrderedDict([('corrAns', 'right'), ('thisCond', 'nonword'), ('thisWord', 'POK')])]
    Routine trial
  LoopTerminator trials
